PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = (1024, 768)
  expName = final_project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    CodeComponent initialization
      Code Type = Auto->JS
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      Begin Experiment:
        import csv
        import glob
        import random as r
        import numpy as np

        condition=0
        dev_mode=True

        stimulus_filename='test_stimulus.csv'

        #print(glob.glob('*'))

        with open(stimulus_filename, mode="r",newline='',encoding="utf-8") as file:
            reader = csv.reader(file)

            if condition==0:
                sentence_cols=[6,8,9]
            elif condition==1:
                sentence_cols=[7,8,10]
            else:
                raise ValueError(f"Condition is {condition}. Condition must be 0 or 1")


            sentence_list=[row[i] for row in reader for i in sentence_cols ]
            file.seek(0)
            word_cols=[0,1,2,3,4,5]
            word_list=[row[i] for row in reader for i in word_cols]
        n_sentences=len(sentence_list)
        n_words=len(word_list)

        if dev_mode:
            print(sentence_list)
            print(word_list)
            print(f"s={n_sentences/n_words}")
        s_order=np.arange(n_sentences)
        w_order=np.arange(n_words)
        r.shuffle(s_order)
        r.shuffle(w_order)
    TextboxComponent instructions_text
      bold = False
      editable = False
      formattingSyntax = md
      letterHeight = 0.1
      size = (1.6, 1)
      startVal [time (s)] = 0.0
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      text:
        You are about to see a series of sentences. Read each sentence and take note of the italicized word. You will be asked to recall the italicized word.

        Example: The quick brown fox *jumps* over the lazy dog.

        Press the spacebar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Encoding
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    TextboxComponent textbox
      bold = False
      editable = False
      formattingSyntax = md
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every frame] = $sentence_list[s_order[encoding_loop.thisTrialN]]
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Flow
  Routine Instructions
  LoopInitiator encoding_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_sentences
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    Routine Encoding
  LoopTerminator encoding_loop
